PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = psychopy_playing
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        HELLO
        WORLD
    TextComponent text_2
      color = blue
      text = This is the second frame
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    TextComponent text_3
      text = Press a key
      stopVal [duration (s)] = 5
      startVal [time (s)] = 3
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = 'space'
      storeCorrect = True
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 3
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Flow
  Routine trial
