PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = stroop
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent text_3
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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  Routine instr
    TextComponent instructionText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press left arrow if colour matches word

        Press right arrow if colour does not match word

        Press either arrow to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychopy_playing_conditions.xlsx
    random seed = 666
    loopType = random
    nReps = 1
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    conditions:
      [{u'colour': u'red', u'word': u'red', u'congruent': 1, u'corrAns': u'left'},
      {u'colour': u'green', u'word': u'red', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'red', u'word': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'blue', u'word': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'yellow', u'word': u'blue', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'green', u'word': u'blue', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'blue', u'word': u'yellow', u'congruent': 0, u'corrAns': u'right'},
      {u'colour': u'yellow', u'word': u'yellow', u'congruent': 1, u'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
